PsychoPy2experiment version="1.82.01"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  color = $[-1,-1,-1]
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = source_monitoring
  Units = use prefs
  Screen = 1
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Routines
  Routine ok
    CodeComponent code
      Begin Routine:
        if(trialtype == "pitch"): # pitch trial
            mic = Input(chnl=0)
            b = Harmonizer(mic, transpo=float(amount))
            c = Gate(b, thresh=-90, falltime=0.02, lookahead=20.0).mix(2).out()
            d = Follower2(b)
            talkThresh = .08
            talkStarted = False
            stoppedTalking = False
            stopTime = 100
        elif(trialtype == 'speed'): # speed trial
            finished = 'not finished'
            playback_speed = float(amount)
            dur = 2
            if playback_speed == 0:
                playback_speed = pow(10,-100)
            i = Input()

            def start():
                rec.play()
                a.play().out()
                tf.stop()

            def stop():
                i.stop()
                global finished
                finished = 'finished'
                a.stop()
                a.reset()
                tf.play()

            tab = NewTable(dur, chnls=2)
            transpo_to_normal = math.log(1.0 / playback_speed, 2) * 12
            j = Harmonizer(i, transpo=transpo_to_normal).mix(2)
            k = Gate(j, thresh=-70, falltime=0.02, lookahead=20.0)
            rec = TableRec(k, tab)
            a = TableRead(table=tab, freq=playback_speed/dur).stop()
            env = Follower(i)
            th = Thresh(env, .2)
            tf = TrigFunc(th, start)
            tr = TrigFunc(rec['trig'], stop)
        else: # unmodified trial
            mic = Input(chnl=0)
            b = Gate(mic, thresh=-90, falltime=0.02, lookahead=20.0).mix(2).out()
            d = Follower2(mic)
            talkThresh = .08
            talkStarted = False
            stoppedTalking = False
            stopTime = 100
      Each Frame:
        if(trialtype == "pitch" or trialtype == "unmodified"):
            if d.get() > talkThresh:
                    talkStarted = True

            if talkStarted and not stoppedTalking:
                if d.get() < talkThresh:
                    stoppedTalking = True
                    stopTime = globalClock.getTime() + 1

            if stoppedTalking and globalClock.getTime() >= stopTime:
                mic.stop()
                for thisComponent in trialComponents:
                    if hasattr(thisComponent, "status"):
                        thisComponent.status = FINISHED
                    continueRoutine = False
        else:
            if(finished == 'finished'):
                for thisComponent in trialComponents:
                    if hasattr(thisComponent, "status"):
                        thisComponent.status = FINISHED
                    continueRoutine = False
    TextComponent text_2
      text [set every repeat] = $word
      stopVal [duration (s)] = 10
      startVal [time (s)] = 1
      letterHeight = 0.1
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  Routine trial_setup
    CodeComponent code_4
  Routine display_results
    TextComponent results_text
      wrapWidth = 2
      text [set every repeat] = $results
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'esc'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial
    CodeComponent code_2
      Begin Experiment:
        serv.start()
        mic = Input(chnl=0)
      Begin Routine:
        b = Harmonizer(mic, transpo=float(amount))
        c = Gate(b, thresh=-90, falltime=0.02, lookahead=20.0).mix(2).out()
        d = Follower2(b)
        talkThresh = .08
        talkStarted = False
        stoppedTalking = False
        stopTime = 100
      End Routine:
        serv.stop()
      End Experiment:
        serv.stop()
      Each Frame:
        if d.get() > talkThresh:
                talkStarted = True

        if talkStarted and not stoppedTalking:
            if d.get() < talkThresh:
                stoppedTalking = True
                stopTime = globalClock.getTime() + 1

        if stoppedTalking and globalClock.getTime() >= stopTime:
            b.stop()
            for thisComponent in trialComponents:
                if hasattr(thisComponent, "status"):
                    thisComponent.status = FINISHED
                continueRoutine = False
    TextComponent text
      text [set every repeat] = $word
      stopVal [duration (s)] = 10
      startVal [time (s)] = 1
      letterHeight = 0.1
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  Routine choose_source
    TextComponent question
      wrapWidth = 2
      text = Whose voice did you hear?
      pos = [0, .5]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    PolygonComponent self_box
      fillColor = $SELF_BOX_FILL_COLOR
      pos = [-.5, -.5]
      lineWidth = 5
      lineColor = $SELF_BOX_BORDER_COLOR
      startVal [time (s)] = 0.0
      size = [0.5, 0.5]
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    TextComponent self_label
      color = black
      text = Mine
      pos = [-.5, -.5]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    PolygonComponent other_box
      fillColor = $OTHER_BOX_FILL_COLOR
      pos = [.5, -.5]
      lineWidth = 5
      lineColor = $OTHER_BOX_BORDER_COLOR
      startVal [time (s)] = 0.0
      size = [0.5, 0.5]
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    TextComponent other_label
      color = black
      text = Other
      pos = [.5, -.5]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    MouseComponent mouse
      timeRelativeTo = routine
      forceEndRoutineOnPress = False
      startVal [time (s)] = 0.0
      saveMouseState = never
    CodeComponent code_5
      Begin Routine:
        if(pitch_lower_done and pitch_higher_done):
            for thisComponent in trialComponents:
                if hasattr(thisComponent, "status"):
                    thisComponent.status = FINISHED
                continueRoutine = False
      End Routine:
        # check if next trial is a new block.
        # if it's a new block, check if current block had 3 "other" votes for either pitch type
        # if so,  1) record appropriate block number for that type
        #  2) set "done" flag to true for that type
        # if both pitch types are done, end the trials loop
        next_block = trials.getFutureTrial(1).block
        this_amount = block * PITCH_DELTA
        if(block != next_block):
            if(choice_stats['pitch higher'] == 3 and not pitch_higher_done):
                expInfo['pitch higher result block'] = block
                expInfo['pitch higher result amount'] = this_amount
                choice_stats['pitch higher block'] = block
                choice_stats['pitch higher amount'] = this_amount
                pitch_higher_done = True
            if(choice_stats['pitch lower'] == 3 and not pitch_lower_done):
                expInfo['pitch lower result block'] = block
                expInfo['pitch lower result amount'] = -1 * this_amount
                choice_stats['pitch lower block'] = block
                choice_stats['pitch lower amount'] = -1 * this_amount
                pitch_lower_done = True
            if(pitch_lower_done and pitch_higher_done):
                trials.finished = True
                for thisComponent in trialComponents:
                    if hasattr(thisComponent, "status"):
                        thisComponent.status = FINISHED
                    continueRoutine = False
            choice_stats['pitch higher'] = 0
            choice_stats['pitch lower'] = 0
        serv.start()
      Each Frame:
        if mouse.isPressedIn(self_box, buttons=[0]):
            trials.addData('choice', 'self')
            for thisComponent in trialComponents:
                if hasattr(thisComponent, "status"):
                    thisComponent.status = FINISHED
                continueRoutine = False
        elif mouse.isPressedIn(other_box, buttons=[0]):
            trials.addData('choice','other')
            choice_stats[trialtype] += 1
            for thisComponent in trialComponents:
                if hasattr(thisComponent, "status"):
                    thisComponent.status = FINISHED
                continueRoutine = False

        if self_box.contains(mouse):
            self_box.fillColor = SELF_BOX_BORDER_COLOR
        else:
            self_box.fillColor = SELF_BOX_FILL_COLOR

        if other_box.contains(mouse):
            other_box.fillColor = OTHER_BOX_BORDER_COLOR
        else:
            other_box.fillColor = OTHER_BOX_FILL_COLOR
  Routine thankyou
    TextComponent text_3
      text = Thank you for participating!
      stopVal [duration (s)] = 5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_6
      End Routine:
        results = '\n\r'

        results += 'Pitch (higher) block = ' + str(choice_stats['pitch higher block']) + '\n\r'
        results += 'Pitch (lower) block = ' + str(choice_stats['pitch lower block']) + '\n\r'
        results += '\n\r'
        results += 'Pitch (higher) amount = ' + str(choice_stats['pitch higher amount']) + '\n\r'
        results += 'Pitch (lower) amount = ' + str(choice_stats['pitch lower amount']) + '\n\r'
  Routine initialize_code
    CodeComponent code_3
      Begin Experiment:
        ## SETTINGS ##

        # This is the word list file
        WORD_LIST_FILE = "wordlist.csv"

        # Colors of the choice buttons
        SELF_BOX_FILL_COLOR = '#A6A9FF'
        SELF_BOX_BORDER_COLOR = '#3E45FA'
        OTHER_BOX_FILL_COLOR = '#FFFCA6'
        OTHER_BOX_BORDER_COLOR = '#FAF33E'

        ## END SETTINGS ##



        from psychopy import gui
        from pyo import *
        import math, sys, csv, random
        from collections import OrderedDict

        # This is the amount to change the pitch on each block of trials (both higher and lower)
        PITCH_DELTA = float(expInfo['delta'])

        # This is where to start the pitch on the first block
        PITCH_START = float(expInfo['start'])


        # This sets up the pyo audio server
        serv = Server()
        out_devices = pa_get_output_devices()
        in_devices = pa_get_input_devices()

        od_index = 0
        id_index = 0

        for od in out_devices[0]:
            if "ASIO" in od:
                odi = int(out_devices[1][od_index])
                serv.setOutputDevice(odi)
                print odi, out_devices[0][od_index]
                break
            od_index += 1

        for id in in_devices[0]:
            if "ASIO" in id:
                idi = int(in_devices[1][id_index])
                serv.setInputDevice(idi)
                print idi, in_devices[0][id_index]
                break
            id_index += 1


        serv.boot()


        # initialize this variable - it keeps track of whether
        # the subject is finished speaking during a time stretch trial
        finished = True


        ##########################################################
        ### read in the original word list file and save word list file for this subject
        ##########################################################

        # container array for file contents
        orig_words = []
        # read csv file with the original word lists (in same directory as this experiment script)
        with open(WORD_LIST_FILE, 'rU') as csvfile:
            test = csv.reader(csvfile)
            for i in test:
                orig_words.append(i)

        # depending on experiementer's selection at run time, either randomize word lists or
        # use the experimenter's order
        def fixList(x):
            return int(x)-1

        if expInfo['listMethod']=='set your own':
            assignment_order = map(fixList, expInfo['listOrder'])
        else:
            assignment_order = random.sample([0,1,2], 3)

        # initialize word containers for the trial types
        unmodified_words = []
        pitch_higher_words = []
        pitch_lower_words = []

        # assign words to those containers
        for row in orig_words:
            unmodified_words.append(row[assignment_order[0]])
            pitch_higher_words.append(row[assignment_order[1]])
            pitch_lower_words.append(row[assignment_order[2]])

        # save word lists for each trial type
        unmodified_word_list = unmodified_words.pop(0)
        pitch_higher_word_list = pitch_higher_words.pop(0)
        pitch_lower_word_list = pitch_lower_words.pop(0)

        # randomize words in their lists
        random.shuffle(unmodified_words)
        random.shuffle(pitch_higher_words)
        random.shuffle(pitch_lower_words)

        # this will be the name of the wordlist csv file for this subject
        wordlist_filename = filename+'_wordlist.csv'
        results_filename = filename+'_summarized_results.csv'

        # build a big array with all the words and also attach trialtype, block, and amount data,
        # like this: [block, word, trialtype, amount, list]
        master_list = []

        # this ensures pitch amount will equal PITCH_START on first block
        pitch_amount = PITCH_START - PITCH_DELTA

        # create blocks of 9 words and add them to master list
        for block_num in range(10):
            block_words = []
            pitch_amount += PITCH_DELTA
            for i in range(3):
                word_index = block_num * 3 + i
                subgroup = []
                subgroup.append([block_num+1, unmodified_words[word_index], 'unmodified', 0, unmodified_word_list])
                subgroup.append([block_num+1, pitch_higher_words[word_index], 'pitch higher', pitch_amount, pitch_higher_word_list])
                subgroup.append([block_num+1, pitch_lower_words[word_index], 'pitch lower', -1 * pitch_amount, pitch_lower_word_list])
                random.shuffle(subgroup)
                block_words += subgroup
            master_list += block_words

        # save csv file to disk
        with open(wordlist_filename,'wb') as w:
            writer=csv.writer(w)
            writer.writerow(['block', 'word', 'trialtype', 'amount', 'list'])
            for row in master_list:
                writer.writerow(row)

        # create container for stats
        # this keeps track of how many times the subject chooses "other" for
        #   each trial type per block
        # it gets reset each block
        choice_stats = OrderedDict()
        choice_stats['unmodified'] = 0 # we shouldn't need this one
        choice_stats['pitch higher'] = 0
        choice_stats['pitch lower'] = 0
        choice_stats['pitch higher block'] = 0
        choice_stats['pitch lower block'] = 0
        choice_stats['pitch higher amount'] = 0
        choice_stats['pitch lower amount'] = 0

        # these hold the "done" status for each pitch trial type
        pitch_higher_done = False
        pitch_lower_done = False

        # start with block number = 0
        this_block = 0
  Routine instructions
    TextComponent text_4
      text = Instructions will go here.
      stopVal [duration (s)] = 5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  Routine initialize_code
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $wordlist_filename
    loopType = sequential
    nReps = 1
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    Routine trial
    Routine choose_source
  LoopTerminator trials
  Routine thankyou
  Routine display_results
