PsychoPy2experiment version="1.81.03"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  color = $[-1,-1,-1]
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = source_monitoring_old
  Units = use prefs
  Screen = 1
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Routines
  Routine ok
    CodeComponent code
      Begin Routine:
        if(trialtype == "pitch"): # pitch trial
            mic = Input(chnl=0)
            b = Harmonizer(mic, transpo=float(amount))
            c = Gate(b, thresh=-90, falltime=0.02, lookahead=20.0).mix(2).out()
            d = Follower2(b)
            talkThresh = .08
            talkStarted = False
            stoppedTalking = False
            stopTime = 100
        elif(trialtype == 'speed'): # speed trial
            finished = 'not finished'
            playback_speed = float(amount)
            dur = 2
            if playback_speed == 0:
                playback_speed = pow(10,-100)
            i = Input()

            def start():
                rec.play()
                a.play().out()
                tf.stop()

            def stop():
                i.stop()
                global finished
                finished = 'finished'
                a.stop()
                a.reset()
                tf.play()

            tab = NewTable(dur, chnls=2)
            transpo_to_normal = math.log(1.0 / playback_speed, 2) * 12
            j = Harmonizer(i, transpo=transpo_to_normal).mix(2)
            k = Gate(j, thresh=-70, falltime=0.02, lookahead=20.0)
            rec = TableRec(k, tab)
            a = TableRead(table=tab, freq=playback_speed/dur).stop()
            env = Follower(i)
            th = Thresh(env, .2)
            tf = TrigFunc(th, start)
            tr = TrigFunc(rec['trig'], stop)
        else: # unmodified trial
            mic = Input(chnl=0)
            b = Gate(mic, thresh=-90, falltime=0.02, lookahead=20.0).mix(2).out()
            d = Follower2(mic)
            talkThresh = .08
            talkStarted = False
            stoppedTalking = False
            stopTime = 100
      Each Frame:
        if(trialtype == "pitch" or trialtype == "unmodified"):
            if d.get() > talkThresh:
                    talkStarted = True

            if talkStarted and not stoppedTalking:
                if d.get() < talkThresh:
                    stoppedTalking = True
                    stopTime = globalClock.getTime() + 1

            if stoppedTalking and globalClock.getTime() >= stopTime:
                mic.stop()
                for thisComponent in trialComponents:
                    if hasattr(thisComponent, "status"):
                        thisComponent.status = FINISHED
                    continueRoutine = False
        else:
            if(finished == 'finished'):
                for thisComponent in trialComponents:
                    if hasattr(thisComponent, "status"):
                        thisComponent.status = FINISHED
                    continueRoutine = False
    TextComponent text_2
      text [set every repeat] = $word
      stopVal [duration (s)] = 10
      startVal [time (s)] = 1
      letterHeight = 0.1
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  Routine trial_setup
    CodeComponent code_4
  Routine display_results
    TextComponent results_text
      wrapWidth = 2
      text [set every repeat] = $results
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'esc'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine thankyou
    TextComponent text_3
      text = Thank you for participating!
      stopVal [duration (s)] = 5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_6
      Begin Routine:
        # calculate mean of stats
        choice_means = OrderedDict()
        for ttype in choice_stats:
            choice_means[ttype] = np.mean(choice_stats[ttype])
      End Routine:
        #win.close()
        #myDlg = gui.Dlg(title="Results", size=gui.wx.Size(-200,-200))
        #for ttype in choice_means:
        #    selfValue = "%.2f" % (choice_means[ttype] * 100.0)
        #    otherValue = "%.2f" % (100 - choice_means[ttype] * 100.0)
        #    myDlg.addText(ttype+': '+selfValue+'% self, '+otherValue+'% other')
        #myDlg.show()

        #core.quit()

        results = '\n\r'
        for ttype in choice_means:
            selfValue = "%.2f" % (choice_means[ttype] * 100.0)
            otherValue = "%.2f" % (100 - choice_means[ttype] * 100.0)
            results += ttype+': '+selfValue+'% self, '+otherValue+'% other'+'\n\r'

        # write summarized results to csv file
        with open(results_filename,'wb') as w:
            writer=csv.writer(w)
            writer.writerow(['trialtype', 'percent_self_choices', 'percent_other_choices'])
            for row in choice_means:
                selfValue = "%.2f" % (choice_means[row] * 100.0)
                otherValue = "%.2f" % (100 - choice_means[row] * 100.0)
                writer.writerow([row, selfValue, otherValue])
  Routine choose_source
    TextComponent question
      wrapWidth = 2
      text = Whose voice did you hear?
      pos = [0, .5]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    PolygonComponent self_box
      fillColor = $SELF_BOX_FILL_COLOR
      pos = [-.5, -.5]
      lineWidth = 5
      lineColor = $SELF_BOX_BORDER_COLOR
      startVal [time (s)] = 0.0
      size = [0.5, 0.5]
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    TextComponent self_label
      color = black
      text = Mine
      pos = [-.5, -.5]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    PolygonComponent other_box
      fillColor = $OTHER_BOX_FILL_COLOR
      pos = [.5, -.5]
      lineWidth = 5
      lineColor = $OTHER_BOX_BORDER_COLOR
      startVal [time (s)] = 0.0
      size = [0.5, 0.5]
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    TextComponent other_label
      color = black
      text = Other
      pos = [.5, -.5]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    MouseComponent mouse
      timeRelativeTo = routine
      forceEndRoutineOnPress = False
      startVal [time (s)] = 0.0
      saveMouseState = never
    CodeComponent code_5
      Each Frame:
        if mouse.isPressedIn(self_box, buttons=[0]):
            trials.addData('choice', 'self')
            choice_stats[trialtype_extended].append(1)
            for thisComponent in trialComponents:
                    if hasattr(thisComponent, "status"):
                        thisComponent.status = FINISHED
                    continueRoutine = False
        elif mouse.isPressedIn(other_box, buttons=[0]):
            trials.addData('choice','other')
            choice_stats[trialtype_extended].append(0)
            for thisComponent in trialComponents:
                    if hasattr(thisComponent, "status"):
                        thisComponent.status = FINISHED
                    continueRoutine = False

        if self_box.contains(mouse):
            self_box.fillColor = SELF_BOX_BORDER_COLOR
        else:
            self_box.fillColor = SELF_BOX_FILL_COLOR

        if other_box.contains(mouse):
            other_box.fillColor = OTHER_BOX_BORDER_COLOR
        else:
            other_box.fillColor = OTHER_BOX_FILL_COLOR
  Routine trial
    CodeComponent code_2
      Begin Experiment:
        serv.start()
        mic = Input(chnl=0)
      Begin Routine:
        if(trialtype == "pitch"): # pitch trial
            b = Harmonizer(mic, transpo=float(amount))
            c = Gate(b, thresh=-90, falltime=0.02, lookahead=20.0).mix(2).out()
            d = Follower2(b)
            talkThresh = .08
            talkStarted = False
            stoppedTalking = False
            stopTime = 100
        elif(trialtype == 'speed'): # speed trial
            finished = 'not finished'
            playback_speed = float(amount)
            dur = 2
            if playback_speed == 0:
                playback_speed = pow(10,-100)

            def start():
                rec.play()
                a.play().out()
                tf.stop()

            def stop():
                k.stop()
                global finished
                finished = 'finished'
                a.stop()
                a.reset()
                tf.play()

            tab = NewTable(dur, chnls=2)
            transpo_to_normal = math.log(1.0 / playback_speed, 2) * 12
            j = Harmonizer(mic, transpo=transpo_to_normal).mix(2)
            k = Gate(j, thresh=-70, falltime=0.02, lookahead=20.0)
            rec = TableRec(k, tab)
            a = TableRead(table=tab, freq=playback_speed/dur).stop()
            env = Follower(mic)
            th = Thresh(env, .1)
            tf = TrigFunc(th, start)
            tr = TrigFunc(rec['trig'], stop)
        else: # unmodified trial
            b = Gate(mic, thresh=-90, falltime=0.02, lookahead=20.0).mix(2).out()
            d = Follower2(mic)
            talkThresh = .08
            talkStarted = False
            stoppedTalking = False
            stopTime = 100
      End Experiment:
        serv.stop()
      Each Frame:
        if(trialtype == "pitch" or trialtype == "unmodified"):
            if d.get() > talkThresh:
                    talkStarted = True

            if talkStarted and not stoppedTalking:
                if d.get() < talkThresh:
                    stoppedTalking = True
                    stopTime = globalClock.getTime() + 1

            if stoppedTalking and globalClock.getTime() >= stopTime:
                b.stop()
                for thisComponent in trialComponents:
                    if hasattr(thisComponent, "status"):
                        thisComponent.status = FINISHED
                    continueRoutine = False
        else:
            if(finished == 'finished'):
                for thisComponent in trialComponents:
                    if hasattr(thisComponent, "status"):
                        thisComponent.status = FINISHED
                    continueRoutine = False
    TextComponent text
      text [set every repeat] = $word
      stopVal [duration (s)] = 10
      startVal [time (s)] = 1
      letterHeight = 0.1
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  Routine initialize_code
    CodeComponent code_3
      Begin Experiment:
        from psychopy import gui
        from pyo import *
        import math, sys, csv, random
        from collections import OrderedDict
        serv = Server().boot()

        ## SETTINGS ##

        SPEED_SMALL_AMOUNT = .9   #0.975
        SPEED_MEDIUM_AMOUNT = .8  #0.95
        SPEED_LARGE_AMOUNT = .7   #0.925
        PITCH_HIGHER_SMALL_AMOUNT = 1.5    #0.5
        PITCH_HIGHER_LARGE_AMOUNT = 2    #1.0
        PITCH_LOWER_SMALL_AMOUNT = -1.5 #-0.5
        PITCH_LOWER_LARGE_AMOUNT = -2 #-1.0

        SELF_BOX_FILL_COLOR = '#A6A9FF'
        SELF_BOX_BORDER_COLOR = '#3E45FA'
        OTHER_BOX_FILL_COLOR = '#FFFCA6'
        OTHER_BOX_BORDER_COLOR = '#FAF33E'

        ## END SETTINGS ##





        # initialize this variable - it keeps track of whether
        # the subject is finished speaking during a time stretch trial
        finished = True

        ##########################################################
        ### read in the original word list file and save word list file for this subject
        ##########################################################
        # container array for file contents
        orig_words = []
        # read csv file with the original word lists (in same directory as this experiment script)
        with open('orig_words.csv', 'rU') as csvfile:
            test = csv.reader(csvfile)
            for i in test:
                orig_words.append(i)

        # depending on experiementer's selection at run time, either randomize word lists or
        # use the experimenter's order
        def fixList(x):
            return int(x)-1

        if expInfo['listMethod']=='set your own':
            assignment_order = map(fixList, expInfo['listOrder'])
        else:
            assignment_order = random.sample([0,1,2,3,4,5,6,7,8], 9)

        # initialize word containers for the trial types
        unmodified_words1 = []
        unmodified_words2 = []
        slowed_small_words = []
        slowed_medium_words = []
        slowed_large_words = []
        pitch_higher_small_words = []
        pitch_higher_large_words = []
        pitch_lower_small_words = []
        pitch_lower_large_words = []

        # assign words to those containers
        for row in orig_words:
            unmodified_words1.append(row[assignment_order[0]])
            unmodified_words2.append(row[assignment_order[1]])
            slowed_small_words.append(row[assignment_order[2]])
            slowed_medium_words.append(row[assignment_order[3]])
            slowed_large_words.append(row[assignment_order[4]])
            pitch_higher_small_words.append(row[assignment_order[5]])
            pitch_higher_large_words.append(row[assignment_order[6]])
            pitch_lower_small_words.append(row[assignment_order[7]])
            pitch_lower_large_words.append(row[assignment_order[8]])

        # this will be the name of the wordlist csv file for this subject
        wordlist_filename = filename+'_wordlist.csv'
        results_filename = filename+'_summarized_results.csv'

        # build a big array with all the words and also attach trialtype and amount data,
        # like this: [word, trialtype, trialtype_extended, amount, list]
        master_list = []

        # add the words (CAREFUL! This assumes all of the categories are of equal length)
        for word_index in range(len(slowed_small_words)):
            if word_index == 0:
                continue
            master_list.append([unmodified_words1[word_index], 'unmodified', 'unmodified',            'unmodified',                                        unmodified_words1[0]])
            master_list.append([unmodified_words2[word_index], 'unmodified', 'unmodified',            'unmodified',                                        unmodified_words2[0]])
            master_list.append([slowed_small_words[word_index],         'speed', 'slow_small',           SPEED_SMALL_AMOUNT,                slowed_small_words[0]])
            master_list.append([slowed_medium_words[word_index],     'speed', 'slow_medium',       SPEED_MEDIUM_AMOUNT,             slowed_medium_words[0]])
            master_list.append([slowed_large_words[word_index],         'speed', 'slow_large',             SPEED_LARGE_AMOUNT,               slowed_large_words[0]])
            master_list.append([pitch_higher_small_words[word_index], 'pitch',  'pitch_higher_small', PITCH_HIGHER_SMALL_AMOUNT,  pitch_higher_small_words[0]])
            master_list.append([pitch_higher_large_words[word_index], 'pitch',  'pitch_higher_large',  PITCH_HIGHER_LARGE_AMOUNT, pitch_higher_large_words[0]])
            master_list.append([pitch_lower_small_words[word_index],  'pitch',  'pitch_lower_small',   PITCH_LOWER_SMALL_AMOUNT,  pitch_lower_small_words[0]])
            master_list.append([pitch_lower_large_words[word_index],  'pitch',  'pitch_lower_large',    PITCH_LOWER_SMALL_AMOUNT,  pitch_lower_large_words[0]])

        # now randomize the list
        random.shuffle(master_list)

        # save csv file to disk
        with open(wordlist_filename,'wb') as w:
            writer=csv.writer(w)
            writer.writerow(['word','trialtype', 'trialtype_extended', 'amount', 'list'])
            for row in master_list:
                writer.writerow(row)

        # create container for stats
        choice_stats = OrderedDict()
        choice_stats['unmodified'] = []
        choice_stats['slow_small'] = []
        choice_stats['slow_medium'] = []
        choice_stats['slow_large'] = []
        choice_stats['pitch_higher_small'] = []
        choice_stats['pitch_higher_large'] = []
        choice_stats['pitch_lower_small'] = []
        choice_stats['pitch_lower_large'] = []
  Routine instructions
    TextComponent text_4
      text = Instructions will go here.
      stopVal [duration (s)] = 5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  Routine initialize_code
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $wordlist_filename
    loopType = sequential
    nReps = 1
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    Routine trial
    Routine choose_source
  LoopTerminator trials
  Routine thankyou
  Routine display_results
